PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.2.4
  Window size (pixels) = [1280, 800]
  color = $[1,1,1]
  expName = smdt_rhythm
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Routines
  Routine trial
    SoundComponent rhythm_sound_first
      sound [set every repeat] = $rhythm_first
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rhythm_first_time
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    SoundComponent rhythm_sound_2
      sound [set every repeat] = $rhythm_second
      startVal [time (s)] = $rhythm_first_time+0.9
      stopVal [duration (s)] = $rhythm_first_time+0.9+rhythm_second_time
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    PolygonComponent rhythm_rect_same
      fillColor = $[0,0,0]
      pos = (0.2, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rhythm_rect_different
      fillColor = $[0,0,0]
      pos = (-0.2, 0.0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent rhythm_key_same_or_diff
      allowedKeys = 'left','right'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = $key_start
      storeCorrect = True
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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      text:
        Tryck högerpil om du tror att samma rytm spelades två gånger.

        Tryck vänsterpil om du tror att två olika rytmer spelades.
    TextComponent text_3
      letterHeight = 0.04
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      text = Samma
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    TextComponent text_4
      letterHeight = 0.04
      pos = (-0.2, 0.0)
      startVal [time (s)] = 0.0
      text = Olika
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        key_start = rhythm_first_time+0.9+rhythm_second_time
        rhythm_rect_same.fillColor = [0, 0, 0]
        rhythm_rect_different.fillColor = [0, 0, 0]


        if rhythm_first == rhythm_second: # check if 1st n 2nd rhythm .wav are the same
            correct_resp = 'right'
        else:
            correct_resp = 'left'
      Each Frame:
        if tThisFlip >= key_start-frameTolerance:
            rhythm_rect_same.fillColor = [-0.5,0.7,-0.5]
            rhythm_rect_different.fillColor = [0.7,-0.5,-0.5]
  Routine inter_rhythm_trial_500ms
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = specifications_csv/smdt_specifications.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rhythm_first', 'rhythm_wavs/rhythm_07.wav'), ('rhythm_second', 'rhythm_wavs/rhythm_07.wav')]),
      OrderedDict([('rhythm_first', 'rhythm_wavs/rhythm_08.wav'), ('rhythm_second', 'rhythm_wavs/rhythm_09.wav')])]
    Routine trial
    Routine inter_rhythm_trial_500ms
  LoopTerminator trials
